CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', 'Load the images by matching files in the folder against the unique text pattern ']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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:OriginalGFAP
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['Perform illumination correction using All images, the Regular method and a small median filter.']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
    Select the input image:OriginalGFAP
    Name the output image:SuboptimalIllum
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:12
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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notes:['Apply the illumination function to the original image and examine the result. In this case, the intensity variations reflect the cells more than the illumination, so this function is undesireable.']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
    Select the input image:OriginalGFAP
    Name the output image:SuboptimalCorr
    Select the illumination function:SuboptimalIllum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationCalculate:[module_num:7|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notes:['This time, perform illumination correction using All images, the Regular method and a larger median filter.']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
    Select the input image:OriginalGFAP
    Name the output image:OptimalIllum
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:125
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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notes:['Apply the illumination function to the original image and examine the result. This time, the intensity variations in the illumination function have been smoothed out, producing a better result.']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
    Select the input image:OriginalGFAP
    Name the output image:OptimalCorr
    Select the illumination function:OptimalIllum
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:9|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notes:['Save the illumination corrected images for adjustment in ImageJ']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OptimalCorr
    Select method for constructing file names:From image filename
    Select image name for file prefix:OriginalGFAP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illuminated
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Brain Injury project\\2 Illumination corrected\\50um\\18WPI
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
