CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Original_Iba1
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:Original_Iba1
    Name the output image:RescaleIntensity
    Rescaling method:Divide each image by the same value
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    Divisor value:0.5
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
IdentifyPrimaryObjects:[module_num:6|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notes:['To detect Soma of the cell (Use original image)']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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:Soma
    Typical diameter of objects, in pixel units (Min,Max):25,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.85
    Lower and upper bounds on threshold:0.3,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:RescaleIntensity
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2
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    Enhancement method:Tubeness
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    Rescale result image:Yes

IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Soma
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:EnhanceOrSuppressFeatures
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Filtered_soma
    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:2
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:No
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
EditObjectsManually:[module_num:9|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
    Select the objects to be edited:Cell
    Name the edited objects:EditedObjects
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:Original_Iba1
    Allow overlapping objects?:No

ConvertObjectsToImage:[module_num:10|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enabled:False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
    Select the input objects:Cell
    Name the output image:CellImage
    Select the color format:Binary (black & white)
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
MorphologicalSkeleton:[module_num:11|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enabled:False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
    Select the input image:CellImage
    Name the output image:MorphologicalSkeleton

Morph:[module_num:12|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enabled:False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
    Select the input image:MorphologicalSkeleton
    Name the output image:MorphBlue
    Select the operation to perform:branchpoints
    Number of times to repeat operation:Once
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    Select the operation to perform:endpoints
    Number of times to repeat operation:Once
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
MeasureObjectSkeleton:[module_num:13|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enabled:False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
    Select the seed objects:Filtered_soma
    Select the skeletonized image:MorphologicalSkeleton
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:Yes
    Intensity image:MorphologicalSkeleton
    File output directory:Elsewhere...|C:\\Users\\Vatsal\\Desktop\\Brain Injury Project\\4 Datasheet\\6um\\8WPI
    Vertex file name:6um_Acute_vertices.csv
    Edge file name:6um_Acute_edges.csv

OverlayObjects:[module_num:14|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enabled:False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
    Input:MorphologicalSkeleton
    Name the output image:SkeletonWithSoma
    Objects:Filtered_soma
    Opacity:0.6

OverlayObjects:[module_num:15|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enabled:False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
    Input:Original_Iba1
    Name the output image:ObjectIdentificationCheck
    Objects:Cell
    Opacity:0.4

MeasureImageSkeleton:[module_num:16|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enabled:False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
    Select an image to measure:MorphologicalSkeleton

MeasureObjectSizeShape:[module_num:17|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enabled:False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
    Select object sets to measure:Cell, Filtered_soma, Soma
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

SaveImages:[module_num:18|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:SkeletonWithSoma
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original_Iba1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:SWS
    Saved file format:png
    Output file location:Elsewhere...|C:\\Users\\Vatsal\\Desktop\\Brain Injury Project\\4 Datasheet\\6um\\8WPI
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:19|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enabled:False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
    Select the type of image to save:Mask
    Select the image to save:ObjectIdentificationCheck
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original_Iba1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:OIC
    Saved file format:tiff
    Output file location:Elsewhere...|E:\\Brain Injury project\\test data
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:20|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enabled:False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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|C:\\Users\\Vatsal\\Desktop\\Brain Injury Project\\4 Datasheet\\6um\\8WPI
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:6um_8WPI
    Overwrite existing files without warning?:No
